PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = emostroopV3
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Routines
  Routine feedback
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if not key_resp_4.keys :
            msg="Too slow!"
        elif key_resp_4.corr:#stored on last run routine
            msg="CORRECT" #:) RT=%.3f" %(key_resp_4.rt)
        else:
            msg="OOPS!" # :("
    TextComponent feedbacktrial
      letterHeight = 0.15
      startEstim = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $msg
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  Routine Over
    PolygonComponent polygon_3
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = "This experiment is over"
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  Routine ClassicStroop
    PolygonComponent polygon_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent classiscstrooptrial
      color [set every repeat] = $colour
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $stim
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine EmotionalStroop
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent trial
      color [set every repeat] = $colour
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $stim
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine CS_feedback
    PolygonComponent polygon_5
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if not key_resp_5.keys :
            msg="Too slow!"
        elif key_resp_5.corr:#stored on last run routine
            msg="CORRECT" #:) RT=%.3f" %(key_resp_5.rt)
        else:
            msg="OOPS!" # :("
    TextComponent feedbacktrial_2
      letterHeight = 0.15
      startEstim = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $msg
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  Routine instrsEmoStroop
    PolygonComponent polygon_7
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Instructions

        Remember, name the COLOUR of the word:

        Left arrow = RED
        Down arrow = BLUE
        Right arrow = GREEN

        Press SPACE to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
    PolygonComponent polygon_6
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent instrsforemostroop
      color = Black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Break
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  Routine instructions
    PolygonComponent polygon_8
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        For this task name the COLOUR of the word using the arrow keys as quickly and accuratly as possible.

        There are 3 colours

        RED = left arrow
        BLUE = down arrow
        GREEN = right arrow


        Press SPACE when ready to start
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    PolygonComponent polygon_9
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions
  Routine blank
  LoopInitiator presentClassicStroop loopType="TrialHandler"
    conditionsFile = stims\classicStroop.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('stim', 'RED'), ('colour', 'red'), ('response', 'congurent'), ('corrAns', 'left')]),
      OrderedDict([('stim', 'BLUE'), ('colour', 'red'), ('response', 'Incongurent'), ('corrAns', 'left')]),
      OrderedDict([('stim', 'GREEN'), ('colour', 'red'), ('response', 'Incongurent'), ('corrAns', 'left')]),
      OrderedDict([('stim', 'RED'), ('colour', 'blue'), ('response', 'Incongurent'), ('corrAns', 'down')]),
      OrderedDict([('stim', 'BLUE'), ('colour', 'blue'), ('response', 'congurent'), ('corrAns', 'down')]),
      OrderedDict([('stim', 'GREEN'), ('colour', 'blue'), ('response', 'Incongurent'), ('corrAns', 'down')]),
      OrderedDict([('stim', 'RED'), ('colour', 'green'), ('response', 'Incongurent'), ('corrAns', 'right')]),
      OrderedDict([('stim', 'BLUE'), ('colour', 'green'), ('response', 'Incongurent'), ('corrAns', 'right')]),
      OrderedDict([('stim', 'GREEN'), ('colour', 'green'), ('response', 'congurent'), ('corrAns', 'right')])]
    Routine ClassicStroop
    Routine CS_feedback
  LoopTerminator presentClassicStroop
  Routine Break
  Routine instrsEmoStroop
  LoopInitiator setBlocks loopType="TrialHandler"
    conditionsFile = stims\controlBlocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsfile', 'PosBlock1.xlsx')]),
      OrderedDict([('condsfile', 'PosBlock2.xlsx')]),
      OrderedDict([('condsfile', 'PosBlock3.xlsx')]),
      OrderedDict([('condsfile', 'NegBlock1.xlsx')]),
      OrderedDict([('condsfile', 'NegBlock2.xlsx')]),
      OrderedDict([('condsfile', 'NegBlock3.xlsx')]),
      OrderedDict([('condsfile', 'NeuBlock1.xlsx')]),
      OrderedDict([('condsfile', 'NeuBlock2.xlsx')]),
      OrderedDict([('condsfile', 'NeuBlock3.xlsx')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsfile
      loopType = random
      nReps = 1
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      Routine EmotionalStroop
      Routine feedback
    LoopTerminator trials
  LoopTerminator setBlocks
  Routine Over
