PsychoPy2experiment version="3.0.0b12"
Settings
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  color = $[-0.15,-0.15,-0.15]
  expName = n-Back_numerical_v1
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Routines
  Routine routine_2_Back
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if trialType=='nonTarget':
            letters = ['1', '2', '3', '4', '5', '6', '7', '8', '9']
            from random import choice
            letter=choice(letters)
            if letter==Back2minus1:
                    from random import choice
                    letter=choice(letters)
        elif trialType=='target':
            letter=Back2minus2

        thisExp.addData('trialType',trialType)
      End Routine:
        Back2minus2=Back2minus1
        Back2minus1=letter
    PolygonComponent polygon_7
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    TextComponent text_4
      letterHeight = 0.4
      pos [set every frame] = [0, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      correctAns = $corrResponse
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      store = first key
      storeCorrect = True
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  Routine routine_0_Back_Target
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        Back0Target=[]
        thisExp.addData('Back0Target', Back0Target)
      Begin Routine:
        letters = ['1', '2', '3', '4', '5', '6', '7', '8', '9']
        from random import choice
        Back0Target=choice(letters)
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_3
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Back0Target
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    TextComponent text
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = TARGET
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  Routine routine_0_Back
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        letter=[]
      Begin Routine:
        if trialType=='nonTarget':
            letters = ['1', '2', '3', '4', '5', '6', '7', '8', '9']
            from random import choice
            letter=choice(letters)
        elif trialType=='target':
            letter=Back0Target
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    TextComponent letterText
      letterHeight = 0.4
      pos [set every frame] = [0, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      correctAns = $corrResponse
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      store = first key
      storeCorrect = True
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  Routine routine_2_Back_Target
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        Back2minus1=[]
        Back2minus2=[]
      Begin Routine:
        letters = ['1', '2', '3', '4', '5', '6', '7', '8', '9']
        from random import choice
        letter=choice(letters)
      End Routine:
        Back2minus2=Back2minus1
        Back2minus1=letter
    PolygonComponent polygon_6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    TextComponent text3
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $letter
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  Routine feedback
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if not key_resp_2.keys :
            msg = 'red'
        elif key_resp_2.corr:#stored on last run routine
            msg = 'green'
        else:
            msg= 'red'
    PolygonComponent polygon_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    TextComponent fb_2
      color [set every repeat] = $msg
      letterHeight = 0.4
      pos [set every frame] = [0, 0]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $letter
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  Routine routine_2backinstruct
    PolygonComponent polygon_4
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent back2_instruc
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        *** 2-back task ***
        Does the current NUMBER match that
        presented 2 NUMBERS previous?
  Routine routine_0backinstructions
    PolygonComponent polygon_5
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        *** 0-back task ***
        Does the current NUMBER
        match the target?
  Routine INST
    PolygonComponent poly
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is an n-back task. The n-back task presents stimuli sequentially and require you to decide if the current stimulus is the same as one presented n-numbers previous (or back).

        There are two parts, a 0-back task, and a 2-back task.

        For the 0-back you will indicate if the current number on the screen matches a defined target.

        Press SPACE if it's a target match.

        For the 2-back you will indicate if the current number matches the number presented 2 places previous
        (e.g.  4 6 4 8 9 8 3 1 shows that '4' and '8' are matches in this sequence).

        Press SPACE if the current NUMBER is the same a 2 places previous.


        Press SPACE bar when ready to start.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finish
    PolygonComponent polygon_8
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This experiment is over
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Flow
  Routine INST
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine routine_0backinstructions
    LoopInitiator Back0Loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine routine_0_Back_Target
      LoopInitiator Back0TrialsLoop loopType="TrialHandler"
        conditionsFile = stim\0-back_loop.xlsx
        loopType = random
        nReps = 20
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        conditions:
          [OrderedDict([('trialType', 'target'), ('corrResponse', 'space')]),
          OrderedDict([('trialType', 'nonTarget'), ('corrResponse', None)]),
          OrderedDict([('trialType', 'nonTarget'), ('corrResponse', None)])]
        Routine routine_0_Back
      LoopTerminator Back0TrialsLoop
    LoopTerminator Back0Loop
    Routine routine_2backinstruct
    LoopInitiator Back2Loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      LoopInitiator Back2TargetLoop loopType="TrialHandler"
        loopType = random
        nReps = 2
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        Routine routine_2_Back_Target
      LoopTerminator Back2TargetLoop
      LoopInitiator Back2TrialsLoop loopType="TrialHandler"
        conditionsFile = stim\2-back_loop.xlsx
        loopType = random
        nReps = 20
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        conditions:
          [OrderedDict([('trialType', 'target'), ('corrResponse', 'space')]),
          OrderedDict([('trialType', 'nonTarget'), ('corrResponse', None)]),
          OrderedDict([('trialType', 'nonTarget'), ('corrResponse', None)])]
        Routine routine_2_Back
      LoopTerminator Back2TrialsLoop
    LoopTerminator Back2Loop
  LoopTerminator trials
  Routine finish
